PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Individual exp1
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        "Welcome to the Learning Phase of the Memory Experiment!

        In this phase, you will be presented with a series of pictures. Your task is to memorize as many of them as you can.

        You will see pictures presented one at a time on the screen.
        Try to remember each picture as it appears.
        Press a key when you recall a picture. If you cannot remember, just wait for the next stimulus.
        There will be a short break between each stimulus.
        Please focus and do your best to remember the items presented. Your memory will be tested later".
  Routine Learning_Stimuli
    ImageComponent image
      image = C:/Users/meshwa/OneDrive/Pictures/canadian-flag-with-the-cn-tower-toronto-canada-EJA7AG.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    ImageComponent image_2
      image = C:/Users/meshwa/OneDrive/Pictures/iconlondon-england-united-kingdom-C36JHJ.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 6.0
      stopVal [duration (s)] = 10.0
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    ImageComponent image_3
      image = C:/Users/meshwa/OneDrive/Pictures/Paris tower.webp
      size = (0.5, 0.5)
      startVal [time (s)] = 11.0
      stopVal [duration (s)] = 15.0
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    ImageComponent image_4
      image = C:/Users/meshwa/OneDrive/Pictures/The_Twins_SE_Asia_2019_(49171985716)_(cropped)_2.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 16.0
      stopVal [duration (s)] = 20.0
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    ImageComponent image_5
      image = C:/Users/meshwa/OneDrive/Pictures/washington-monument-usa-flag-remembrance.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 25.0
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  Routine key_resp
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine Instructions
    Routine key_resp
    Routine Learning_Stimuli
  LoopTerminator trials
