PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = individual exp 2 new
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        "Welcome to the Retrieval Phase of the Memory Experiment!

        In this phase, you will be initially asked after how many hours/mins of sleep you are doing this, followed by to recall the pictures you were presented with earlier. Also a song would be made listned to you before you write down your answers. Try your best to remember as many as you can."
  Routine Routine2
    TextboxComponent Resp
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine Routine1
    TextboxComponent Hours_of_sleep
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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Flow
  Routine trial
  Routine Routine1
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 6
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    conditions:
      [{'ImageFile': 'C:\\Users\\meshwa\\Documents\\PSYCHO-PY\\America.jpeg'},
      {'ImageFile': 'C:\\Users\\meshwa\\Documents\\PSYCHO-PY\\Canada.png'},
      {'ImageFile': 'C:\\Users\\meshwa\\Documents\\PSYCHO-PY\\India.jpeg'},
      {'ImageFile': 'C:\\Users\\meshwa\\Documents\\PSYCHO-PY\\london flag.jpeg'},
      {'ImageFile': 'C:\\Users\\meshwa\\Documents\\PSYCHO-PY\\Malaysia.jpeg'},
      {'ImageFile': 'C:\\Users\\meshwa\\Documents\\PSYCHO-PY\\paris flag.jpg'}]
    Routine Routine2
  LoopTerminator trials
